PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001', 'group': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [1920, 1080]
  color = black
  expName = 270300_Mental_Rotation
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Routines
  Routine instructions_2D
    ImageComponent instr_2D
      image = Stimuli_2D\instructions\instructions.png
      size = (584, 441)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent instr_2D_kb
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ITI_Fixation_2D
    CodeComponent fix_point_2D_code
      Code Type = Auto->JS
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      Begin Routine:
        # Logging der Pfade der verwendeten Bilddateien
        # Diese Variablen werden in die Experimental-csv-Daatei geschrieben und
        # als Pfad für die image-Stimuli verwendet
        img_correct_path = 'Stimuli_2d/correct' + str(img_index[trials_2D.thisN]) + '.png' # Pfad des korrekten 2D-Bildes
        img_wrong_path = 'Stimuli_2d/wrong' + str(img_index[trials_2D.thisN]) + '.png' # Pfad des falschen 2D-Bildes
        img_target_path = 'Stimuli_2d/target' + str(img_index[trials_2D.thisN]) + '.png' # Pfad des Target-Bildes
    PolygonComponent fix_point_2D
      durationEstim = 1
      fillColor = white
      shape = circle
      size = (5, 5)
      startEstim = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    StaticComponent fix_point_2D_ISI
      durationEstim = 1
      startEstim = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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  Routine trial_2D
    CodeComponent trial_2D_code
      Code Type = Auto->JS
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      Begin Experiment:
        # Importieren der relevanten / benötigten Libraries
        import random # für Zugriff auf die random- und shuffle-Methode

        # Erstellen der Liste mit den Bild-Indices
        # Da die Bilder von 1-15 durchnummeriert sind (z.B. correct1.png), wird eine Liste mit
        # entsprechenden Integern angelegt
        img_index = [1,2,3,4,5,6,7,8,9,10,11,12,13,14,15]

        # Randomisierung der Liste mit den Bild-Indices
        # wenn als Pfad zur Bilddatei $#Stimuli_2D/target' + str(img_index[trials.thisN]) + '.png'
        # verwendet wird, erhält man eine zufällige Reihenfolge der Bilddateien,
        # da die img_index-Liste vorher geshuffelt wurde
        random.shuffle(img_index)
      Begin Routine:
        # Festlegen der x-Position der Correct- und
        # Wrong-Stimuli / Bilder
        # x_pos_correct wird bei dem Bildstimulus
        # img_correct, -x_pos_correct bei dem
        # Bildstimulus img_wrong unter Position als x-Koordinate
        # verwendet. Der Wert 250 ist arbiträr gewählt, die
        # Anordnung der Stimuli ähnelt aber der in der
        # Aufgabenstellung vorgegebenen Anordnung.
        if random.random() < 0.5:
            x_pos_correct = -250
        else:
            x_pos_correct = 250
      End Routine:
        # Speichern der x-Koordinaten der Stimuli
        # x_pos_correct = x-Position (pix) der img_correct-Stimuli
        # x_pos_wrong = x-Position (pix) der img_wrong-Stimuli
        thisExp.addData('x_pos_correct', x_pos_correct)
        thisExp.addData('x_pos_wrong', -x_pos_correct)

        # Speichern der verwendeten Bilddateien
        # (in den csv-Dateien kann man anhand der Zahlen
        # der verwendeten Bilder sehen, dass die Stimuli
        # randomisiert präsentiert werden)
        thisExp.addData('img_correct', img_correct_path)
        thisExp.addData('img_wrong', img_wrong_path)
        thisExp.addData('img_target', img_target_path)
    MouseComponent trial_2D_mouse
      clickable = img_correct, img_wrong
      durationEstim = 10
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable = name, pos
      startEstim = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      timeRelativeTo = routine
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    ImageComponent img_correct
      durationEstim = 10
      image [set during: ITI_Fixation_2D.fix_point_2D_ISI] = $img_correct_path
      pos [set every repeat] = (x_pos_correct, -139)
      size = (300, 278)
      startEstim = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = pix
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    ImageComponent img_target
      durationEstim = 10
      image [set during: ITI_Fixation_2D.fix_point_2D_ISI] = $img_target_path
      pos = (0, 139)
      size = (300, 278)
      startEstim = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = pix
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    ImageComponent img_wrong
      durationEstim = 10
      image [set during: ITI_Fixation_2D.fix_point_2D_ISI] = $img_wrong_path
      pos [set every repeat] = (-x_pos_correct, -139)
      size = (300, 278)
      startEstim = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = pix
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  Routine instructions_3D
    TextComponent instr_3D
      letterHeight = 0.1
      startEstim = 0
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.2
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      text:
        Die folgenden Figuren müssen verglichen werden. Überlappen die Figuren durch Drehen vollständig, dann drücken Sie die Pfeiltaste nach OBEN, wenn nicht, drücken Sie die Pfeiltaste nach UNTEN.

        Zum Fortfahren bitte LEERTASTE drücken.
    KeyboardComponent instr_3D_kb
      allowedKeys = 'space'
      forceEndRoutine = True
      startEstim = 0
      startVal [time (s)] = 0.0
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  Routine ITI_Fixation_3D
    PolygonComponent fix_point_3D
      durationEstim = 1
      fillColor = white
      shape = circle
      size = (5, 5)
      startEstim = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    StaticComponent fix_point_3D_ISI
      durationEstim = 1
      startEstim = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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  Routine trial_3D
    CodeComponent trial_3D_code
      Code Type = Py
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      Begin Experiment:
        ## Laden der relevanten Libraries
        import os       # für OS-spezifischen Separator
        import sys      # um Pfad des aktuellen Python-Skriptes auszulesen
        import glob     # zum Erstellen einer Liste mit allen Bildernamen
        import re


        # Custom Funktion für natural sorting
        # gefunden unter: https://github.com/bdrung/snippets/blob/master/natural_sorted.py
        # Grund für Verwendung: Wenn Pfade zu Bilddateien per glob ausgelesen werden, wird die Reihen-
        # folge verändert (xx_0, xx_100, xx_150, xx_50), da die 5 höher als 0 oder 1 ist.
        # Natural Sorting sortiert die Pfadnamen so, "wie man es erwarten würde", d.h. so, als ob
        # die Dateien xx_50 als xx_050 vorlägen.
        def natural_sorted(iterable, key=None, reverse=False):
            """Return a new naturally sorted list from the items in *iterable*.

            The returned list is in natural sort order. The string is ordered
            lexicographically (using the Unicode code point number to order individual
            characters), except that multi-digit numbers are ordered as a single
            character.

            Has two optional arguments which must be specified as keyword arguments.

            *key* specifies a function of one argument that is used to extract a
            comparison key from each list element: ``key=str.lower``.  The default value
            is ``None`` (compare the elements directly).

            *reverse* is a boolean value.  If set to ``True``, then the list elements are
            sorted as if each comparison were reversed.

            The :func:`natural_sorted` function is guaranteed to be stable. A sort is
            stable if it guarantees not to change the relative order of elements that
            compare equal --- this is helpful for sorting in multiple passes (for
            example, sort by department, then by salary grade).
            """
            prog = re.compile(r"(\d+)")

            def alphanum_key(element):
                """Split given key in list of strings and digits"""
                return [int(c) if c.isdigit() else c for c in prog.split(key(element)
                        if key else element)]

            return sorted(iterable, key=alphanum_key, reverse=reverse)




        ## Einlesen der Bilder
        '''
        1. Pfad des Experimentes / aktuellen Python-Skriptes auslesen
        Grund: wenn das Experiment auf anderen Rechnern ausgeführt wird,
               wäre ein Hardcoden des Pfades zum Experiment (z.B. der Pfad
               auf _meinem_ PC unklug, da es auf anderem PC zu Fehler käme)

         Erläuterung des Codes:
        - sys.argv[0] ist der Name des Skriptes
        - os.path.realpath(<path>) wandelt Argument in kanonischen Pfad ("kürzester Pfad i.S.v. Stringlänge"
            bzw. Pfad ohne symbolische Links, Abkürzungen wie /./../ um"), sodass der Pfad eindeutig
            und unique ist -> Output ist der kanonische Pfad der Scriptdatei
        - os.path.dirname(<path>) gibt den Pfad der Inputdatei oder des Input-Directory (in Form einer Pfades
            übergeben) aus -> Output ist der Pfad der Scriptdatei sys.argv[0]
        '''
        exp_root_path = os.path.dirname(os.path.realpath(sys.argv[0]))

        '''
        2. Abhängig vom aktuellen Block (und somit auch Gruppenzugehörigkeit, da Blockreihenfolge für Gruppe A
        und B unterschiedlich) wird das Verzeichnis der zu verwendenden Bilder dynamisch festgelegt.

        Erläuterungen:
            abhängig von der verwendeten Conditions-File steht in der Conditions-Spalte in Zeile 1 easy (Gruppe A) oder
            hard (Gruppe B). Für Gruppe A enthält ist Conditions[0] somit easy, für Gruppe B hard. Conditions[1] ist für
            Gruppe A hard, für Gruppe B easy.
            Zu Beginn des 3D-Taskes soll eine Liste mit den relativen Pfaden (relativ zu Root-Dir des Experimentes)
            zu ALLEN Bildern, die in der jeweiligen Gruppe verwendet werden, in der entsprechenden Reihenfolge
            erstellt werden. Durch einen Trialindex wird dann innerhalb der Image-Komponente der trial_3D-Routine auf
            das entsprechende Bild zugegriffen, wobei das Bild selbst während der Fixations geladen wird.
        '''

        if expInfo['group'] == "A":
            first_block = 'Stimuli_3D\\easy'
            second_block = 'Stimuli_3D\\hard'
        elif expInfo['group'] == "B":
            first_block = 'Stimuli_3D\\hard'
            second_block = 'Stimuli_3D\\easy'

        img_path_1 = exp_root_path + os.sep + first_block     # Pfad der Bilder, die zuerst erscheinen sollen (easy oder hard)
        img_path_2 = exp_root_path + os.sep + second_block     # Pfad der Bilder, die als zweites erscheinen sollen

        '''
        3. Auslesen der Pfade zu den Bilddateien und Erstellen der Liste mit relativen Pfaden, natürlich sortiert

        '''

        img_files_1 = glob.glob(img_path_1 + os.sep + '*.jpg')  # Erstellt Liste mit Pfaden zu den Bildern, die im 1. Block gezeigt werden
                                                                # (easy oder hard, abhängig von Gruppenzugehörigkeit)
        img_files_2 = glob.glob(img_path_2 + os.sep + '*.jpg')  # Liste mit Pfaden zu den Bildern, die im 2. Block gezeigt werden


        # Anlegen zweier Listen für relative Pfade. Die Elemente der Listen werden separat natürlich sortiert,
        # bevor sie in eine einzelne Liste zusammengeführt werden
        img_files_rel_1 = []
        img_files_rel_2 = []

        # Eigentliches Auslesen der relativen Pfade (Liste der Bilder, die im 1. Block gezeigt werden sollen)
        for img in img_files_1:
            img_split = img.split(os.sep)   # trennt die Strings an den Stellen, wo der OS Seperator (Windows: \\) vorliegt
            img_joined = os.sep.join(img_split[-3:])    # fügt die letzten 3 Elemente (Stimuli_3D, easy (oder hard), Filename.jpg zusammen
            img_files_rel_1.append(img_joined)     # fügt den relativen Pfad der img_files_complete-Liste hinzu

        # Eigentliches Auslesen der relativen Pfade (Liste der Bilder, die im 2. Block gezeigt werden sollen)
        for img in img_files_2:
            img_split = img.split(os.sep)
            img_joined = os.sep.join(img_split[-3:])
            img_files_rel_2.append(img_joined)

        # Natural sorting der Listen unter Verwendung der custom Function
        img_files_rel_1_sorted = natural_sorted(img_files_rel_1)
        img_files_rel_2_sorted = natural_sorted(img_files_rel_2)

        # Zusammenführen ("Concatenation") der Listen
        # Diese enthält nun alle 2x192 = 384 relativen Pfade zu den Stimuli in der Art, dass
        # für Gruppe A zunächst alle Pfade der Bilder im easy-Ordner, dann alle Pfade der Bilder
        # im hard-Ordner folgen. Für Gruppe B verhält es sich entsprechend umgekehrt.
        img_files_complete = [*img_files_rel_1_sorted, *img_files_rel_2_sorted]

        # Festlegen der Answer-Keys
        # Hier können die Tasten, mit denen deckungsgleiche und nicht deckungsgleiche
        # Bilder angegeben werden sollen, festgelegt werden. Dies wird bei der
        # Bewertung der Antwort (richtig oder falsch) unter End Routine in dieser
        # Code Komponenten automatisch berücksichtigt
        same_key = 'up'
        diff_key = 'down'

        # Liste mit erlaubten Keys (die Keyboard-Komponente benötigt die
        # erlaubten Keys als Liste. Man kann nicht einfach die Variablennamen
        # eintragen)
        allowed_keys = [same_key, diff_key]

        # Liste mit 0 für korrekte und 1 für falsche Antworten
        # Wird unter End Routine dieser Code Komponente verwendet
        correct_keys = []
      End Routine:
        '''
        Überprüfen der Antworttaste der VP auf Richtigkeit.
        Für den Fall, dass die Bilder des 3D Task randomisiert
        bzw. geshuffelt präsentiert werden sollen, erfolgt der
        Check nicht anhand einer Liste mit alternierend up und down
        Einträgen. Stattdessen wird auf ein großes R im relativen
        Pfad des im aktuellen Trial verwendeten Stimulus geprüft.
        Wenn der relative Pfad ein R einhält, handelt es sich um einen
        Trial mit nicht deckungsgleichen Bildern, weshalb dann die
        diff_key-Taste (default: 'down') die korrekte Antwort ist und eine
        1 geloggt wird.
        Wird die same_key-Taste gedrückt, war es eine falsche Antwort und
        es wird die 0 geloggt.
        Umgekehrt verhält es sich mit der Zuordnung in den Trials mit deckungsgleichen
        Stimuli. Hier ist der same_key (default: 'up') die korrekte Antwort,
        weshalb bei Druck dieser Taste eine 1 geloggt wird.
        '''

        if "R" in img_files_complete[trials_3D.thisN]:
            if key_resp_3D.keys == diff_key:
                corrAns = 1
            else:
                corrAns = 0
        else:
            if key_resp_3D.keys == same_key:
                corrAns = 1
            else:
                corrAns = 0

        # Loggen des relativen Pfades des aktuellen Stimulus
        # sowie der Richtigkeit der Antwort (werden in separate Spalten
        # der Experimental-csv-Datei geschrieben)
        thisExp.addData('corrAns', corrAns)
        thisExp.addData('stim_path', img_files_complete[trials_3D.thisN])

        # Loggen der Antworten (diese Liste wird zur Berechnung der Anzahl korrekter Antworten
        # in der feedback_code-Komponente der feedback_3D-Routine verwendet)
        correct_keys.append(corrAns)

        # Extraktion des Rotationswinkels des Vergleichsstimulus
        # So kann man später graphisch die Reaktionszeit gegen den Rotationswinkel darstellen.
        # Zunächst wird der relative Pfad des aktuell verwendeten Stimulus (z.B. "Stimuli_3D\easy\07_50.jpg")
        # am Unterstrich "_" getrennt ('Stimuli', '3D\easy\', '50.jpg) und in der Variable
        # splt_path gespeichert.
        # Wenn im Pfad des im akuellen Trial verwendeten Stimulus kein "R" vorkommt (deckungsgleiche Stimuli),
        # wird das letzte Elemente der Liste splt_path (z.B. 50.jpg) am Punkt "." getrennt.
        # Das vorletzte Element des Resultats (splt_path[-1].split(".")[-2]) ist dann der Rotationswinkel.
        # Wenn ein "R" im relativen Pfad vorkommt, entfällt der letzte Schritt (Split des letzten
        # Elementes der Liste splt_path beim Doppelpunkt und Verwendung des vorletzten Elementes des Resultates).
        # Hier ist das vorletzte Element der Variable splt_path der Rotationswinkel.
        splt_path = img_files_complete[trials_3D.thisN].split("_")

        if "R" not in img_files_complete[trials_3D.thisN]:
            rotation_degree = splt_path[-1].split(".")[-2]
            same_or_diff = "same"
        else:
            rotation_degree = splt_path[-2]
            same_or_diff = "diff"

        # Fügt den Rotationswinkel des Vergleichsstimulus den Experimentaldaten hinzu
        thisExp.addData('Rotation_Degree', rotation_degree)
        thisExp.addData('Same_or_Diff', same_or_diff)
    ImageComponent stim_3D
      durationEstim = 10
      image [set during: ITI_Fixation_3D.fix_point_3D_ISI] = $img_files_complete[trials_3D.thisN]
      size = (800, 427)
      startEstim = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = pix
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    KeyboardComponent key_resp_3D
      allowedKeys = allowed_keys
      durationEstim = 10
      forceEndRoutine = True
      startEstim = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine feedback_3D
    CodeComponent feedback_code
      Code Type = Auto->JS
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      Begin Experiment:
        # Festlegen, wie viele der letzten Trials bei Berechnung der korrekten
        # Trials für Feedback-Message berücksichtigt werden sollen
        # n_Trials_Feedback letzter Trials
        # n_Trials_Feedback: Anzahl letzter Trials, die für Berechnung berücksichtigt
        # werden sollen
        n_Trials_Feedback = 10
      Begin Routine:
        # Anpassen der Feedback Message nach 10 Trials
        # Falls kein Feedback angezeigt werden soll (da aktueller
        # Trial kein Vielfaches von 10), wird die Routine übersprungen und der
        # nächste Trial startet. Da Indexing in Python bei 0 beginnt, muss für den
        # Modulo-Operator zum aktuellen Trialindex 1 addiert werden
        if (trials_3D.thisN+1) % n_Trials_Feedback == 0:
            nCorr = sum(correct_keys[-n_Trials_Feedback:])
            msg = str(nCorr) + ' der letzten ' + str(n_Trials_Feedback) + ' korrekt.'
        else:
            msg = ''
            continueRoutine = False
    TextComponent feedback_text
      durationEstim = 3
      letterHeight = 0.2
      startEstim = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $msg
      units = norm
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Flow
  Routine instructions_2D
  LoopInitiator trials_2D loopType="TrialHandler"
    loopType = random
    nReps = 15
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    Routine ITI_Fixation_2D
    Routine trial_2D
  LoopTerminator trials_2D
  Routine instructions_3D
  LoopInitiator trials_3D loopType="TrialHandler"
    loopType = sequential
    nReps = 384
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    Routine ITI_Fixation_3D
    Routine trial_3D
    Routine feedback_3D
  LoopTerminator trials_3D
